<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:ffmpeg="clr-namespace:Bonsai.FFmpeg;assembly=Bonsai.FFmpeg"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>1</gl:Width>
          <gl:Height>1</gl:Height>
          <gl:VSync>Off</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Green</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>false</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Hidden</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>First</gl:DisplayDevice>
          <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>3</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:RenderFrame" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>TimeStep.ElapsedRealTime</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" DisplayName="PWM Arduino" Category="COM Ports" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:Name>ArdPWM</io:Name>
          <io:PortName>COM4</io:PortName>
          <io:BaudRate>115200</io:BaudRate>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>true</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="StimulusCSV" />
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>flickerFreqCSV_TEST.csv</io:FileName>
        <io:ListSeparator>,</io:ListSeparator>
        <io:ScanPattern>%f</io:ScanPattern>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it[0]</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ToArray" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Length</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>nFreqs</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>FreqArray</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>StimulusCSVLoaded</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="num:CreateRandom">
            <num:Seed>42</num:Seed>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject">
          <Name>Random</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Count" DisplayName="nReps" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GenerateRandomStimOrder</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>nFreqs</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>nFreqs</Name>
            </Expression>
            <Expression xsi:type="Subtract">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RangeMax" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
              <RangeMin>0</RangeMin>
              <RangeMax>10</RangeMax>
              <Count>11</Count>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToInt32(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Random</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Permutation" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Count" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimIndexArray</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Length</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TotalStimulusCount</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimulusCSVLoaded</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ISI" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GetNextStimFrequency</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>FreqArray</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimIndexArray</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="ISI" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TotalStimulusCount</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimEnded</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="IntProperty">
                      <Value>3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1[Item2]</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1[Item2]</scr:Expression>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToString(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringRead">
                <io:PortName>ArdPWM</io:PortName>
                <io:NewLine>\r</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Parse">
              <Pattern>%i</Pattern>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Retry" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>-1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimEnded</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="14" Label="Source1" />
            <Edge From="1" To="12" Label="Source1" />
            <Edge From="2" To="11" Label="Source1" />
            <Edge From="3" To="7" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="10" Label="Source2" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="StimDuration" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>2000</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Convert.ToString(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="StimulusType" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>s</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Item1+","+Item2+","+Item3</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>ArdPWM</io:PortName>
          <io:NewLine>\r</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>TrialParams</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FreqArray</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
          <Property Name="Wheel Arudino" />
          <Property Name="PD Arduino" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Arduino</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="PortName" DisplayName="Wheel Arudino" Category="COM Ports" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="io:CreateSerialPort">
                  <io:Name>ArduinoSerial</io:Name>
                  <io:PortName>COM1</io:PortName>
                  <io:BaudRate>1000000</io:BaudRate>
                  <io:Encoding>us-ascii</io:Encoding>
                  <io:Parity>None</io:Parity>
                  <io:ParityReplace>63</io:ParityReplace>
                  <io:DataBits>8</io:DataBits>
                  <io:StopBits>One</io:StopBits>
                  <io:Handshake>None</io:Handshake>
                  <io:DiscardNull>false</io:DiscardNull>
                  <io:DtrEnable>true</io:DtrEnable>
                  <io:RtsEnable>false</io:RtsEnable>
                  <io:ReadBufferSize>4096</io:ReadBufferSize>
                  <io:WriteBufferSize>2048</io:WriteBufferSize>
                  <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="io:SerialStringRead">
                  <io:PortName>ArduinoSerial</io:PortName>
                  <io:NewLine>\n</io:NewLine>
                </Combinator>
              </Expression>
              <Expression xsi:type="Parse">
                <Pattern>%i,%i,%i,%i,%i,%i</Pattern>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Retry" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>WheelInput</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item2</Selector>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:DistinctUntilChanged" />
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>LeftLick</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item3</Selector>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:DistinctUntilChanged" />
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>RightLick</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item4</Selector>
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>LastSyncPulseTime</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item5</Selector>
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>Photodiode</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item6</Selector>
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>ArduinoTime</Name>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="PortName" DisplayName="PD Arduino" Category="COM Ports" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="io:CreateSerialPort">
                  <io:Name>ArduinoPD</io:Name>
                  <io:PortName>COM9</io:PortName>
                  <io:BaudRate>250000</io:BaudRate>
                  <io:Encoding>us-ascii</io:Encoding>
                  <io:Parity>None</io:Parity>
                  <io:ParityReplace>63</io:ParityReplace>
                  <io:DataBits>8</io:DataBits>
                  <io:StopBits>One</io:StopBits>
                  <io:Handshake>None</io:Handshake>
                  <io:DiscardNull>false</io:DiscardNull>
                  <io:DtrEnable>true</io:DtrEnable>
                  <io:RtsEnable>false</io:RtsEnable>
                  <io:ReadBufferSize>4096</io:ReadBufferSize>
                  <io:WriteBufferSize>2048</io:WriteBufferSize>
                  <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="io:SerialStringRead">
                  <io:PortName>ArduinoPD</io:PortName>
                  <io:NewLine>\n</io:NewLine>
                </Combinator>
              </Expression>
              <Expression xsi:type="Parse">
                <Pattern>%i,%i</Pattern>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Retry" />
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>PDandAsync</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="4" To="7" Label="Source1" />
              <Edge From="4" To="10" Label="Source1" />
              <Edge From="4" To="13" Label="Source1" />
              <Edge From="4" To="15" Label="Source1" />
              <Edge From="4" To="17" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
              <Edge From="8" To="9" Label="Source1" />
              <Edge From="10" To="11" Label="Source1" />
              <Edge From="11" To="12" Label="Source1" />
              <Edge From="13" To="14" Label="Source1" />
              <Edge From="15" To="16" Label="Source1" />
              <Edge From="17" To="18" Label="Source1" />
              <Edge From="19" To="20" Label="Source1" />
              <Edge From="21" To="22" Label="Source1" />
              <Edge From="22" To="23" Label="Source1" />
              <Edge From="23" To="24" Label="Source1" />
              <Edge From="24" To="25" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>WheelLogger</Name>
              <Description>Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Overwrite" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Suffix" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>FilenamePrefix</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>_Wheel</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.Item1+it.Item2</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}.csv</Format>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>WheelLog</Name>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>M24018_ScreenFlicker_0b_Wheel.csv</io:FileName>
                    <io:Delimiter>,</io:Delimiter>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>Timestamp</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                    <io:Selector />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="11" Label="Source2" />
                  <Edge From="1" To="11" Label="Source3" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source4" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>MButton Back Clear D H L Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>VideoLogger</Name>
              <Description>Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>VideoLog</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Overwrite" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Suffix" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>FilenamePrefix</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>_Video</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.Item1+it.Item2</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}.csv</Format>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>M24018_ScreenFlicker_0b_Video.csv</io:FileName>
                    <io:Delimiter>,</io:Delimiter>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>Timestamp</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                    <io:Selector />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="10" Label="Source4" />
                  <Edge From="1" To="10" Label="Source2" />
                  <Edge From="2" To="10" Label="Source3" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PhotodiodeLogger</Name>
              <Description>Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Overwrite" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Suffix" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>FilenamePrefix</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>_Photodiode</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.Item1+it.Item2</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}.csv</Format>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PDLog</Name>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>M24018_ScreenFlicker_0b_Photodiode.csv</io:FileName>
                    <io:Delimiter>,</io:Delimiter>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>Timestamp</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                    <io:Selector />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="11" Label="Source2" />
                  <Edge From="1" To="11" Label="Source3" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source4" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>TrialLogger</Name>
              <Description>Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialParams</Name>
                  </Expression>
                  <Expression xsi:type="Parse">
                    <Pattern>%s,%i,%f</Pattern>
                    <Separator />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.DateTime.TimeOfDay</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Overwrite" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Suffix" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>FilenamePrefix</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>_TrialParams</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.Item1+it.Item2</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}.csv</Format>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ArduinoTime</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(Item1.Item1.Item1 as StimulusType, Item1.Item1.Item2 as StimulusDuration, Item1.Item1.Item3 as StimulusFrequency, Item2 as ArduinoTime, Item1.Item2 as BonsaiTime)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>M24018_ScreenFlicker_0b_TrialParams.csv</io:FileName>
                    <io:Delimiter>,</io:Delimiter>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>Timestamp</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                    <io:Selector />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="15" Label="Source1" />
                  <Edge From="5" To="17" Label="Source2" />
                  <Edge From="6" To="17" Label="Source3" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="17" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source4" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>WheelLogging</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>WheelInput</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LastSyncPulseTime</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ArduinoTime</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RenderFrameCount</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(Item1.Item1 as Wheel, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>WheelLog</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source4" />
                  <Edge From="3" To="5" Label="Source2" />
                  <Edge From="4" To="5" Label="Source3" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>VideoLogging</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>VideoFrameCount</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ArduinoTime</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>VideoLEDAsync</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(Item1.Item1 as VideoFrameCount, Item1.Item3 as LEDAsync, Item2 as ArduinoTime, Item1.Item2 as BonsaiTime)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>VideoLog</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source2" />
                  <Edge From="3" To="6" Label="Source2" />
                  <Edge From="4" To="5" Label="Source3" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PhotodiodeLogging</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PDandAsync</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ArduinoTime</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="scr:ExpressionTransform">
                      <scr:Expression>new(Item1.Item1 as Photodiode, Item1.Item2 as AsyncPulse, Item2 as BonsaiTime, Item3 as ArduinoTime)</scr:Expression>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(Item1.Item1.Item1 as Photodiode, Item1.Item1.Item2 as AsyncPulse, Item1.Item2 as BonsaiTime, Item2 as ArduinoTime)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>PDLog</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="1" To="4" Label="Source2" />
            <Edge From="1" To="6" Label="Source2" />
            <Edge From="1" To="8" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Fake Arduino for testing</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>WheelInput</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>LeftLick</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RightLick</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>LastSyncPulseTime</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Photodiode</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ArduinoTime</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PDandAsync</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Left</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="MulticastSubject">
              <Name>LeftLick</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Right</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="MulticastSubject">
              <Name>RightLick</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:MouseMove" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>X</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0.01S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>10</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="IntProperty">
                <Value>10</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(Item2 as Item1, Item1 as Item2)</scr:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>WheelInput</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ArduinoTime</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="15" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="31" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="33" Label="Source1" />
            <Edge From="30" To="31" Label="Source2" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source2" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="34" To="37" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Video</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CameraCapture">
                <cv:Index>0</cv:Index>
                <cv:CaptureProperties>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Fps</cv:Property>
                    <cv:Value>30</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Saturation</cv:Property>
                    <cv:Value>0</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Exposure</cv:Property>
                    <cv:Value>-5</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Gain</cv:Property>
                    <cv:Value>0</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Contrast</cv:Property>
                    <cv:Value>100</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Brightness</cv:Property>
                    <cv:Value>0</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Sharpness</cv:Property>
                    <cv:Value>0</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Gamma</cv:Property>
                    <cv:Value>0</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Backlight</cv:Property>
                    <cv:Value>0</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>FrameWidth</cv:Property>
                    <cv:Value>2560</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>FrameHeight</cv:Property>
                    <cv:Value>1440</cv:Value>
                  </cv:CapturePropertyAssignment>
                </cv:CaptureProperties>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Flip">
                <cv:Mode>Both</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Index</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>VideoFrameCount</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Width</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Height</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:TimeInterval" />
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>496</cv:X>
                  <cv:Y>0</cv:Y>
                  <cv:Width>552</cv:Width>
                  <cv:Height>330</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>1968</cv:X>
                  <cv:Y>42</cv:Y>
                  <cv:Width>64</cv:Width>
                  <cv:Height>78</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Sum" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>VideoLEDAsync</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FilenamePrefix</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_video.avi</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>M24018_ScreenFlicker_0b_video.avi</cv:FileName>
                <cv:Suffix>Timestamp</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>30</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>MButton Back Clear D H L Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="ffmpeg:VideoWriter">
                  <ffmpeg:FileName>eddTest_SDTraining_video.avi</ffmpeg:FileName>
                  <ffmpeg:Suffix>Timestamp</ffmpeg:Suffix>
                  <ffmpeg:Overwrite>false</ffmpeg:Overwrite>
                  <ffmpeg:FrameRate>30</ffmpeg:FrameRate>
                  <ffmpeg:OutputArguments>-vb 15M -vcodec mpeg4</ffmpeg:OutputArguments>
                </Combinator>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="17" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="1" To="8" Label="Source1" />
            <Edge From="1" To="9" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="16" To="20" Label="Source2" />
            <Edge From="17" To="19" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton MButton XButton1 Back Tab Clear Return Enter A D E H I L M Shift</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="StimulusID" Category="Filename" />
        <Property Name="MouseID" Category="Filename" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Generate File Names</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimulusID" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>sinusoidalFlick</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="MouseID" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>eddtest</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_{1}</Format>
              <Selector>Item2,Item1</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>FilenamePrefix</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FilenamePrefix</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_EyeLog.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>EyeName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_PDAsync.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PDname</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_WheelLog.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>WheelName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_Trial.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_Metadata.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>MetadataName</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="7" To="12" Label="Source1" />
            <Edge From="7" To="14" Label="Source1" />
            <Edge From="7" To="16" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>VarInIt</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed>42</num:Seed>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Random</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Sync</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialProgress</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SyncPulse</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>QuadState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>EyeFrameCount</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TimerExpired</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Users\saleem_lab\Documents\VisualStimuli_Temp\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RepCounter</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="binFileName" Category="Filename" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>SparseNoise_Log_.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Bin FileName</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>200</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>MousePos</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>VideoFrameCount</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>DurationSingleImage</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Index</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>RenderFrameCount</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="27" Label="Source3" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="27" Label="Source2" />
      <Edge From="24" To="31" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="37" To="39" Label="Source1" />
      <Edge From="38" To="39" Label="Source2" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>