<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p2="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="StimulusID" Category="Filename" />
        <Property Name="MouseID" Category="Filename" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Generate File Names</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimulusID" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>test</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="MouseID" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>test</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="SavingDirBase" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Users\Saleem Lab\Documents\LEDStimulation\BonsaiCode</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{2}\Data\{1}\{3}\{0}_{1}</Format>
              <Selector>Item1,Item2,Item3,Item4</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>FilenamePrefix</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FilenamePrefix</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_WheelLog.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>WheelName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_Trial.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_Video.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>VideoCSVName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_FaceVideo.avi</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>FaceVideoName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_BodyVideo.avi</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>BodyVideoName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_ArduinoStim.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PWMCSVName</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonSource">
              <ipy:Script>from System import DateTime,String

@returns(String)
def generate(): 
  yield (DateTime.Now).ToString("yyyyMMdd")</ipy:Script>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>DateDir</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="7" Label="Source2" />
            <Edge From="4" To="7" Label="Source4" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source3" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="13" Label="Source1" />
            <Edge From="10" To="15" Label="Source1" />
            <Edge From="10" To="17" Label="Source1" />
            <Edge From="10" To="19" Label="Source1" />
            <Edge From="10" To="21" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>MButton Back Clear D H L Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:SubscribeWhen" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>PhotodiodeLogger</Name>
                <Description>Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.</Description>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Overwrite" />
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Suffix" />
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Name" />
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>PDLog</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>PDname</Name>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="FileName" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="io:CsvWriter">
                      <io:FileName>C:\Users\saleem_lab\Documents\Data\M25026\2025-04-29\DotMotion_SpeedTuning_M25026_PDAsync.csv</io:FileName>
                      <io:Delimiter>,</io:Delimiter>
                      <io:Append>false</io:Append>
                      <io:Overwrite>false</io:Overwrite>
                      <io:Suffix>Timestamp</io:Suffix>
                      <io:IncludeHeader>true</io:IncludeHeader>
                      <io:Selector />
                    </Expression>
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="6" Label="Source2" />
                    <Edge From="1" To="6" Label="Source3" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="6" Label="Source4" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:SubscribeWhen" />
              </Builder>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>TrialLogger</Name>
              <Description>Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialParams</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(Item1 as Stimulus,
Item2 as BonsaiTime)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Overwrite" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Suffix" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialName</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source4" />
                  <Edge From="5" To="9" Label="Source2" />
                  <Edge From="6" To="9" Label="Source3" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ArduinoPWMLogger</Name>
              <Description>Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Overwrite" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Suffix" />
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>ArduinoTime</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PWMCSVName</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ArdPWMInput</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>"</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Item2+Item1+Item2</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="rx:WithLatestFrom" />
                    </Builder>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(Item1 as ArduinoString,
Item2 as BonsaiTime)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>D:\\Data\M25070\20250813\FrozenWhiteNoise_M25070_ArduinoStim.csv</io:FileName>
                    <io:Delimiter>,</io:Delimiter>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>Timestamp</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                    <io:Selector>ArduinoString,BonsaiTime</io:Selector>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="14" Label="Source2" />
                  <Edge From="1" To="14" Label="Source3" />
                  <Edge From="2" To="12" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="14" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source4" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source2" />
            <Edge From="0" To="5" Label="Source2" />
            <Edge From="0" To="7" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ISI" Category="Timing" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GetNextStimulus</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>FreqArray</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>StimIndexArray</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>0</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
                <Property Name="DueTime" DisplayName="ISI" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>StimEnded</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Delay">
                  <rx:DueTime>PT2S</rx:DueTime>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>1</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Accumulate" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>TotalStimulusCount</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Value" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Value" />
                    </Expression>
                    <Expression xsi:type="LessThan">
                      <Operand xsi:type="IntProperty">
                        <Value>550</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="2" Label="Source1" />
                    <Edge From="1" To="2" Label="Source2" />
                    <Edge From="2" To="3" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="scr:ExpressionTransform">
                <scr:Expression>Item1[Item2]</scr:Expression>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="scr:ExpressionTransform">
                <scr:Expression>Item1[Item2]</scr:Expression>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="scr:ExpressionTransform">
                <scr:Expression>Convert.ToString(it)</scr:Expression>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="WorkflowOutput" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringRead">
                <io:PortName>ArdPWM</io:PortName>
                <io:NewLine>\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Parse">
              <Pattern>%i</Pattern>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Retry" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>-1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimEnded</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ArdPWMInput</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimulusValues</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentState</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>EnsureCorrectStateIndex</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>nStates</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="LessThan" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DistributionIndex" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ProbDistArray</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ProbabilityDistributions" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="ISI" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimEnded</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>NotPause</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PauseFlag</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:RandSampleFromIndexedDistribution">
                <p1:ProbabilityDistributions>
                  <p1:ArrayOfFloat>
                    <p1:float>25</p1:float>
                    <p1:float>25</p1:float>
                    <p1:float>0</p1:float>
                    <p1:float>25</p1:float>
                    <p1:float>25</p1:float>
                  </p1:ArrayOfFloat>
                  <p1:ArrayOfFloat>
                    <p1:float>20</p1:float>
                    <p1:float>20</p1:float>
                    <p1:float>20</p1:float>
                    <p1:float>20</p1:float>
                    <p1:float>20</p1:float>
                  </p1:ArrayOfFloat>
                </p1:ProbabilityDistributions>
                <p1:DistributionIndex>0</p1:DistributionIndex>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CurrentStimIndex</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1[Item2]</scr:Expression>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToString(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="rx:Condition">
              <Name>Pause</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PauseFlag</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT4S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>-1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StimEnded</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StimEnded</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="14" Label="Source1" />
            <Edge From="1" To="12" Label="Source1" />
            <Edge From="2" To="11" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="18" To="23" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="24" To="38" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="36" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="36" Label="Source2" />
            <Edge From="31" To="34" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="32" To="42" Label="Source1" />
            <Edge From="33" To="34" Label="Source2" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source3" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source2" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="46" To="47" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>ArdPWM</io:PortName>
          <io:NewLine>\r</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>TrialParams</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="StateTrackingDuration" Category="Timing" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="StateTrackingDuration" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ClasifyTrialAndUpdateCounters</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:First" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>TrialStateClass</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialStateClass</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentStimIndex</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialCounters</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TrialCounterArray" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:IncrementStateDependentTrialCounter">
                      <p1:TrialCounterArray>
                        <p1:ArrayOfInt>
                          <p1:int>2</p1:int>
                          <p1:int>2</p1:int>
                          <p1:int>3</p1:int>
                          <p1:int>2</p1:int>
                          <p1:int>2</p1:int>
                        </p1:ArrayOfInt>
                        <p1:ArrayOfInt>
                          <p1:int>0</p1:int>
                          <p1:int>0</p1:int>
                          <p1:int>0</p1:int>
                          <p1:int>0</p1:int>
                          <p1:int>0</p1:int>
                        </p1:ArrayOfInt>
                      </p1:TrialCounterArray>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TrialCounters</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>MonitorTrialCountsSub</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="4" To="11" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="5" To="11" Label="Source2" />
                  <Edge From="6" To="9" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source3" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Concat" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Repeat" />
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="UpdateProbabilityDistsBool" Category="StimControl" />
        <Property Name="scalingFactor" Category="StimControl" />
        <Property Name="DistsFileName" />
        <Property Name="StimFileName" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>AdaptiveStimControl</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DistsFileName" Category="StimulusSpec" />
              <Property Name="StimFileName" Category="StimulusSpec" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>GenStimProbDists</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FileName" DisplayName="DistsFileName" />
                  </Expression>
                  <Expression xsi:type="io:CsvReader">
                    <io:FileName>StimulusCSVfiles\sinusoidalFlicker\dists_4hzenvelope_singlePanel.csv</io:FileName>
                    <io:ScanPattern>%f,%f</io:ScanPattern>
                    <io:SkipRows>1</io:SkipRows>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>ProbDist1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>ProbDist2</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToList" />
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="rx:ToArray" />
                    </Builder>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>ProbDistArray</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Count</Selector>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
                      <Selector>Length</Selector>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>nStates</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>initCountersSub</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>OriginalProbDistArray</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Length</Selector>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>nStim</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FileName" DisplayName="StimFileName" />
                  </Expression>
                  <Expression xsi:type="io:CsvReader">
                    <io:FileName>StimulusCSVfiles\sinusoidalFlicker\stimuli_4hzenvelope_singlePanel.csv</io:FileName>
                    <io:ScanPattern />
                    <io:SkipRows>1</io:SkipRows>
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Name>Trim "</ipy:Name>
                    <ipy:Script>@returns(str)
def process(value):
  cleaned_string = value.replace('"', '')
  return cleaned_string</ipy:Script>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>StimulusValues</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Length</Selector>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="7" To="19" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="11" To="18" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>InitTrialCounters</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>nStim</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:RepeatCount">
                      <rx:Count>5</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>nStates</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:RepeatCount">
                      <rx:Count>2</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToList" />
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="rx:ToArray" />
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
                      <Selector>Count</Selector>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>TrialCounters</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>initCountersSub</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Skip">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>MonitorTrialCountsSub</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="14" Label="Source1" />
                  <Edge From="12" To="18" Label="Source3" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="13" To="21" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="16" To="18" Label="Source1" />
                  <Edge From="17" To="18" Label="Source2" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="UpdateProbabilityDistsBool" Category="StimControl" />
              <Property Name="scalingFactor" Category="StimControl" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>UpdateProbabilityDists</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialCounters</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>OriginalProbDistArray</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Skip">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="scalingFactor" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:UpdateProbDistArray">
                      <p1:scalingFactor>1E+21</p1:scalingFactor>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>UpdateProbDistsBool</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ProbDistArray</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="UpdateProbabilityDistsBool" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>UpdateProbDistsBool</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>SimulateState</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="Disable">
                      <Builder xsi:type="Combinator">
                        <Combinator xsi:type="rx:Timer">
                          <rx:DueTime>PT0S</rx:DueTime>
                          <rx:Period>PT2S</rx:Period>
                        </Combinator>
                      </Builder>
                    </Expression>
                    <Expression xsi:type="Disable">
                      <Builder xsi:type="Combinator">
                        <Combinator xsi:type="num:CreateRandom">
                          <num:Seed xsi:nil="true" />
                        </Combinator>
                      </Builder>
                    </Expression>
                    <Expression xsi:type="Disable">
                      <Builder xsi:type="Combinator">
                        <Combinator xsi:type="p2:CreateNormal">
                          <p2:Mean>0</p2:Mean>
                          <p2:StdDev>4</p2:StdDev>
                        </Combinator>
                      </Builder>
                    </Expression>
                    <Expression xsi:type="Disable">
                      <Builder xsi:type="Combinator">
                        <Combinator xsi:type="p2:Sample" />
                      </Builder>
                    </Expression>
                    <Expression xsi:type="Disable">
                      <Builder xsi:type="scr:ExpressionTransform">
                        <scr:Expression>it &lt; 0 ? 0 :
1
</scr:Expression>
                      </Builder>
                    </Expression>
                    <Expression xsi:type="Disable">
                      <Builder xsi:type="rx:BehaviorSubject">
                        <Name>CurrentState</Name>
                      </Builder>
                    </Expression>
                    <Expression xsi:type="Disable">
                      <Builder xsi:type="WorkflowOutput" />
                    </Expression>
                    <Expression xsi:type="Disable">
                      <Builder xsi:type="ExternalizedMapping">
                        <Property Name="Value" DisplayName="CurrentState" />
                      </Builder>
                    </Expression>
                    <Expression xsi:type="Disable">
                      <Builder xsi:type="Combinator">
                        <Combinator xsi:type="IntProperty">
                          <Value>2</Value>
                        </Combinator>
                      </Builder>
                    </Expression>
                    <Expression xsi:type="Disable">
                      <Builder xsi:type="rx:BehaviorSubject">
                        <Name>CurrentState</Name>
                      </Builder>
                    </Expression>
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="7" To="8" Label="Source1" />
                    <Edge From="8" To="9" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>MonitorTrialCounts</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MonitorTrialCountsSub</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>State0?</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Item3[Item1][Item2]</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>InitBarGraph</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT0S</rx:DueTime>
                            <rx:Period>PT0.001S</rx:Period>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>nStim</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Count" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>5</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT0S</rx:DueTime>
                            <rx:Period>PT0.1S</rx:Period>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:Accumulate" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>nStim</Name>
                        </Expression>
                        <Expression xsi:type="Subtract">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Count" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>4</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="4" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="14" Label="Source1" />
                        <Edge From="5" To="13" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="12" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source2" />
                        <Edge From="12" To="13" Label="Source2" />
                        <Edge From="13" To="14" Label="Source2" />
                        <Edge From="14" To="15" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>State1?</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Item3[Item1][Item2]</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="viz:BarGraphBuilder">
                    <viz:IndexSelector>Item2</viz:IndexSelector>
                    <viz:ValueSelector>Item1</viz:ValueSelector>
                    <viz:BaseAxis>X</viz:BaseAxis>
                    <viz:BarType>Cluster</viz:BarType>
                    <viz:Capacity xsi:nil="true" />
                    <viz:Min xsi:nil="true" />
                    <viz:Max xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="viz:BarGraphBuilder">
                    <viz:IndexSelector>Item2</viz:IndexSelector>
                    <viz:ValueSelector>Item1</viz:ValueSelector>
                    <viz:BaseAxis>X</viz:BaseAxis>
                    <viz:BarType>Cluster</viz:BarType>
                    <viz:Capacity xsi:nil="true" />
                    <viz:Min xsi:nil="true" />
                    <viz:Max xsi:nil="true" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="5" To="11" Label="Source2" />
                  <Edge From="6" To="12" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="8" To="10" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="12" To="15" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" DisplayName="PWMport" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:Name>ArdPWM</io:Name>
          <io:PortName>COM3</io:PortName>
          <io:BaudRate>115200</io:BaudRate>
          <io:Encoding>us-ascii</io:Encoding>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>true</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>ShiftKey P Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>PauseFlag</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="UseChA" />
        <Property Name="UseChB" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>PWM Channel Selection</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="UseChA" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.ToString()</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>useChA</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1+","+Item2</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringWrite">
                <io:PortName>ArdPWM</io:PortName>
                <io:NewLine>\r</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="UseChB" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.ToString()</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>useChB</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1+","+Item2</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringWrite">
                <io:PortName>ArdPWM</io:PortName>
                <io:NewLine>\r</io:NewLine>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="13" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>CurrentState</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="wie:KeyDown">
            <wie:Filter>V</wie:Filter>
            <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="al:AudioReader">
            <al:FileName>C:\Users\Saleem Lab\Downloads\mixkit-on-or-off-light-switch-tap-2585.wav</al:FileName>
            <al:BufferLength>10</al:BufferLength>
            <al:SampleRate>0</al:SampleRate>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:WithLatestFrom" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Item2</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="al:AudioPlayback">
            <al:DeviceName>Generic Software on Speakers/Headphones (Realtek Audio)</al:DeviceName>
            <al:SampleRate>44100</al:SampleRate>
            <al:State>Playing</al:State>
          </Combinator>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="21" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="27" To="29" Label="Source1" />
      <Edge From="28" To="29" Label="Source2" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>