<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p2="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitialiseVars</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StateContext" Description="Use Standing or Walking" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Standing</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Context</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="SamplingMethod" Description="use Staircase or MOCS" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Staircase</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Method</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>StimEnded</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>StimStarted</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StepSize_Standing</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StepSize_Walking</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>DiscriminationResponse</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>DetectionResponse</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>-1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateTrialPayload">
                <p1:Context>Standing</p1:Context>
                <p1:Method>Staircase</p1:Method>
                <p1:StimulusType>s</p1:StimulusType>
                <p1:BaseFrequency>200</p1:BaseFrequency>
                <p1:Duration>1000</p1:Duration>
                <p1:EnvFrequency>2</p1:EnvFrequency>
                <p1:ContrastA>0.5</p1:ContrastA>
                <p1:ContrastB>0.5</p1:ContrastB>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateTrialResult" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>TrialCompleted</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" DisplayName="PWMport" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:CreateSerialPort">
                <port:Name>ArdPWM</port:Name>
                <port:PortName>COM3</port:PortName>
                <port:BaudRate>9600</port:BaudRate>
                <port:NewLine>\r\n</port:NewLine>
                <port:Parity>None</port:Parity>
                <port:ParityReplace>63</port:ParityReplace>
                <port:DataBits>8</port:DataBits>
                <port:StopBits>One</port:StopBits>
                <port:Handshake>None</port:Handshake>
                <port:DiscardNull>false</port:DiscardNull>
                <port:DtrEnable>false</port:DtrEnable>
                <port:RtsEnable>false</port:RtsEnable>
                <port:ReadBufferSize>4096</port:ReadBufferSize>
                <port:WriteBufferSize>2048</port:WriteBufferSize>
                <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="20" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="24" Label="Source1" />
            <Edge From="22" To="24" Label="Source2" />
            <Edge From="23" To="24" Label="Source3" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TrialManager</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialCompleted</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Name>Standing, Staircase</scr:Name>
              <scr:Expression>it.OriginalPayload.Method == "Staircase" &amp;&amp; it.OriginalPayload.Context == "Standing"</scr:Expression>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
                <Name>Previous Trial Standing</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>OriginalPayload.Context</Selector>
                    </Expression>
                    <Expression xsi:type="Equal">
                      <Operand xsi:type="StringProperty">
                        <Value>Standing</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>IsCorrect</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:StaircaseProcedure">
                <p1:InitialIntensity>10</p1:InitialIntensity>
                <p1:StepSize>1</p1:StepSize>
                <p1:MinIntensity>0</p1:MinIntensity>
                <p1:MaxIntensity>100</p1:MaxIntensity>
                <p1:CorrectRule>2</p1:CorrectRule>
                <p1:IncorrectRule>1</p1:IncorrectRule>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Staircase_Standing</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialCompleted</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Name>Standing, Staircase</scr:Name>
              <scr:Expression>it.OriginalPayload.Method == "Staircase" &amp;&amp; it.OriginalPayload.Context == "Walking"</scr:Expression>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
                <Name>Previous Trial Walking</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>OriginalPayload.Context</Selector>
                    </Expression>
                    <Expression xsi:type="Equal">
                      <Operand xsi:type="StringProperty">
                        <Value>Walking</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>IsCorrect</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:StaircaseProcedure">
                <p1:InitialIntensity>10</p1:InitialIntensity>
                <p1:StepSize>1</p1:StepSize>
                <p1:MinIntensity>0</p1:MinIntensity>
                <p1:MaxIntensity>100</p1:MaxIntensity>
                <p1:CorrectRule>2</p1:CorrectRule>
                <p1:IncorrectRule>1</p1:IncorrectRule>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Staircase_Walking</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialCompleted</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Name>Standing, MOCS</scr:Name>
              <scr:Expression>it.OriginalPayload.Method == "MOCS" &amp;&amp; it.OriginalPayload.Context == "Standing"</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:MocsProcedure">
                <p1:Intensities>
                  <p1:double>30</p1:double>
                  <p1:double>40</p1:double>
                  <p1:double>50</p1:double>
                  <p1:double>60</p1:double>
                  <p1:double>70</p1:double>
                </p1:Intensities>
                <p1:Repetitions>10</p1:Repetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>MOCS_Standing</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialCompleted</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Name>Walking, MOCS</scr:Name>
              <scr:Expression>it.OriginalPayload.Method == "MOCS" &amp;&amp; it.OriginalPayload.Context == "Walking"</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:MocsProcedure">
                <p1:Intensities>
                  <p1:double>30</p1:double>
                  <p1:double>40</p1:double>
                  <p1:double>50</p1:double>
                  <p1:double>60</p1:double>
                  <p1:double>70</p1:double>
                </p1:Intensities>
                <p1:Repetitions>10</p1:Repetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>MOCS_Walking</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GenerateTrialPayload</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialCompleted</Name>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="GroupWorkflow">
              <Name>StartTrialsTrigger</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="wie:KeyDown">
                      <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift</wie:Filter>
                      <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:First" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>CheckForPause</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsPaused</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Method</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>isStaircase</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>Staircase</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>GetStaircaseTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Context</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Standing Trial</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="StringProperty">
                            <Value>Standing</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Staircase_Standing</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Intensity</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Walking Trial</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="StringProperty">
                            <Value>Walking</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Staircase_Walking</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Intensity</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="8" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="13" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>isMOCS</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>MOCS</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>GetMOCSTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Context</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Standing Trial</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="StringProperty">
                            <Value>Standing</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MOCS_Standing</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Walking Trial</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="StringProperty">
                            <Value>Walking</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MOCS_Walking</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="7" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="11" Label="Source1" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateDiscreteUniform">
                <p2:Lower>0</p2:Lower>
                <p2:Upper>1</p2:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Sample" />
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Subtract">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Context</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Method</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Context" Selector="Item1" />
                <Property Name="Method" Selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateTrialPayload">
                <p1:Context>Walking</p1:Context>
                <p1:Method>MOCS</p1:Method>
                <p1:StimulusType>se</p1:StimulusType>
                <p1:BaseFrequency>200</p1:BaseFrequency>
                <p1:Duration>1000</p1:Duration>
                <p1:EnvFrequency>4</p1:EnvFrequency>
                <p1:ContrastA>1</p1:ContrastA>
                <p1:ContrastB>1</p1:ContrastB>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>CurrentPayload</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="7" To="14" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="19" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="24" Label="Source1" />
            <Edge From="20" To="22" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>PauseWorkflow</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>ShiftKey P Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>IsPaused</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ResponseHardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyUp">
                <wie:Filter>L</wie:Filter>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>RightResponse</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyUp">
                <wie:Filter>A</wie:Filter>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>LeftResponse</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CurrentPayload</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DueTime" DisplayName="ISI" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Trials</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialReadLine" />
            </Expression>
            <Expression xsi:type="Parse">
              <Pattern>%i</Pattern>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Retry" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>-1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Duration</Selector>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="FloatProperty">
                <Value>100</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromMilliseconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timeout">
                <rx:DueTime>PT1.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>-1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Catch" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StimEnded</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ClickEndStim</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FileName" DisplayName="StimEndSound" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="al:AudioReader">
                      <al:FileName>mixkit-modern-technology-select-3124.wav</al:FileName>
                      <al:BufferLength>500</al:BufferLength>
                      <al:SampleRate>44100</al:SampleRate>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="al:AudioPlayback">
                      <al:DeviceName>Generic Software on Speakers/Headphones (Realtek(R) Audio)</al:DeviceName>
                      <al:SampleRate>44100</al:SampleRate>
                      <al:State>Playing</al:State>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.StimulusType == "s" ? string.Format("s,{0},{1},{2},{3},{4},{5},{6}", it.Duration, it.FreqA, it.FreqB, it.PhaseA, it.PhaseB, it.ContrastA, it.ContrastB) : string.Format("se,{0},{1},{2},{3},{4},{5}", it.Duration, it.FreqA, it.FreqB, it.EnvFrequency, it.ContrastA, it.ContrastB)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialWriteLine">
                <port:PortName>ArdPWM</port:PortName>
                <port:NewLine>\r</port:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ClickStartStim</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FileName" DisplayName="StimStartTone" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="al:AudioReader">
                      <al:FileName>mixkit-on-or-off-light-switch-tap-2585.wav</al:FileName>
                      <al:BufferLength>1000</al:BufferLength>
                      <al:SampleRate>44100</al:SampleRate>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="al:AudioPlayback">
                      <al:DeviceName>Generic Software on Speakers/Headphones (Realtek(R) Audio)</al:DeviceName>
                      <al:SampleRate>44100</al:SampleRate>
                      <al:State>Playing</al:State>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimEnded</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>TrialResponse</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source2</Name>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>GetResponse</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RightResponse</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LeftResponse</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>-1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Amb" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Throttle">
                            <rx:DueTime>PT0.25S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:BufferTrigger">
                            <rx:Count xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Count</Selector>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>OneClick</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="IntProperty">
                                  <Value>1</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>MoreThanOneClick</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="GreaterThan">
                                <Operand xsi:type="IntProperty">
                                  <Value>1</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:First" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="4" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="4" To="6" Label="Source1" />
                        <Edge From="4" To="13" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="7" To="10" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="12" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source2" />
                        <Edge From="12" To="13" Label="Source2" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DiscriminationResponse</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DetectionResponse</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateTrialResult" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="7" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source3" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="10" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="15" Label="Source1" />
            <Edge From="5" To="19" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>SubjectData.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>RandomStateAndMethodGenerator</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateDiscreteUniform">
                <p2:Lower>0</p2:Lower>
                <p2:Upper>1</p2:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Sample" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>RandomContext</scr:Name>
              <scr:Expression>it == 0 ? "Standing" : "Walking"</scr:Expression>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Context</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.05S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateDiscreteUniform">
                <p2:Lower>0</p2:Lower>
                <p2:Upper>1</p2:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Sample" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>RandomMethod</scr:Name>
              <scr:Expression>it == 0 ? "Staircase" : "MOCS"</scr:Expression>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Method</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.05S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="0" To="9" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="15" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>TrialCompleted</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ClickAudio</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>StimEnded</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
                <Property Name="FileName" DisplayName="StimEndSound" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="al:AudioReader">
                  <al:FileName>mixkit-modern-technology-select-3124.wav</al:FileName>
                  <al:BufferLength>500</al:BufferLength>
                  <al:SampleRate>44100</al:SampleRate>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Item2</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="al:AudioPlayback">
                  <al:DeviceName>Generic Software on Speakers/Headphones (Realtek(R) Audio)</al:DeviceName>
                  <al:SampleRate>44100</al:SampleRate>
                  <al:State>Playing</al:State>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>StimStarted</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
                <Property Name="FileName" DisplayName="StimStartTone" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="al:AudioReader">
                  <al:FileName>mixkit-on-or-off-light-switch-tap-2585.wav</al:FileName>
                  <al:BufferLength>1000</al:BufferLength>
                  <al:SampleRate>44100</al:SampleRate>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Item2</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="al:AudioPlayback">
                  <al:DeviceName>Generic Software on Speakers/Headphones (Realtek(R) Audio)</al:DeviceName>
                  <al:SampleRate>44100</al:SampleRate>
                  <al:State>Playing</al:State>
                </Combinator>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="5" To="7" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="11" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>