WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(StateContext, SamplingMethod, PWMport)
-> GroupWorkflow InitialiseVars
    ExternalizedMapping(Value(DisplayName=StateContext, Description="Use Standing or Walking"))
    -> StringProperty(Value=Standing)
    -> BehaviorSubject Context

    ExternalizedMapping(Value(DisplayName=SamplingMethod, Description="use Staircase or MOCS"))
    -> StringProperty(Value=MOCS)
    -> BehaviorSubject Method

    IntProperty(Value=0)
    -> PublishSubject StimEnded

    IntProperty(Value=0)
    -> PublishSubject StimStarted

    DoubleProperty(Value=2)
    -> BehaviorSubject StepSize_Standing

    DoubleProperty(Value=2)
    -> BehaviorSubject StepSize_Walking

    IntProperty(Value=0)
    -> PublishSubject DiscriminationResponse

    IntProperty(Value=0)
    -> PublishSubject DetectionResponse

    DoubleProperty(Value=0) => #18
    IntProperty(Value=-1) => #19
    #18, #19 -> Zip
    -> CreateTrialPayload(Context=Standing, Method=Staircase, StimulusType=s, BaseFrequency=200, Duration=1000, EnvFrequency=2, ContrastA=0.5, ContrastB=0.5) => #21
    IntProperty(Value=0) => #22
    IntProperty(Value=0) => #23
    #21, #22, #23 -> Zip
    -> CreateTrialResult
    -> PublishSubject TrialCompleted

    ExternalizedMapping(PortName(DisplayName=PWMport))
    -> Bonsai.IO.Ports.CreateSerialPort
      Name=ArdPWM
      PortName=COM6
      BaudRate=115200
      NewLine=\r\n
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

ExternalizedMapping
  Intensities(DisplayName="MOCS frequencies", Category=MOCS)
  Repetitions(DisplayName=TrialRepsShuffling, Category=MOCS)
  InitialIntensity(Category=Staircase)
  StepSizes(Category=Staircase)
  MovingAverageWindow(Category=Staircase)
  MinIntensity(Category=Staircase)
  MaxIntensity(Category=Staircase)
  CorrectRule(Category=Staircase)
  IncorrectRule(Category=Staircase)
-> GroupWorkflow TrialManager
    SubscribeSubject TrialCompleted
    -> Bonsai.Scripting.Expressions.ExpressionCondition "Standing, Staircase"
      Expression: it.OriginalPayload.Method == "Staircase" && it.OriginalPayload.Context == "Standing"
    -> MemberSelector(Selector=IsCorrect) => #2
    ExternalizedMapping(InitialIntensity, StepSizes, MovingAverageWindow, MinIntensity, MaxIntensity, CorrectRule, IncorrectRule) => #3
    #2, #3 -> StaircaseProcedure(InitialIntensity=60, StepSizes(double=5, double=2), MovingAverageWindow=8, MinIntensity=10, MaxIntensity=200, CorrectRule=2, IncorrectRule=1)
    -> BehaviorSubject Staircase_Standing
    SubscribeSubject TrialCompleted
    -> Bonsai.Scripting.Expressions.ExpressionCondition "Standing, Staircase"
      Expression: it.OriginalPayload.Method == "Staircase" && it.OriginalPayload.Context == "Walking"
    -> MemberSelector(Selector=IsCorrect) => #8
    #8, #3 -> StaircaseProcedure(InitialIntensity=60, StepSizes(double=5, double=2), MovingAverageWindow=8, MinIntensity=10, MaxIntensity=200, CorrectRule=2, IncorrectRule=1)
    -> BehaviorSubject Staircase_Walking

    SubscribeSubject TrialCompleted
    -> Bonsai.Scripting.Expressions.ExpressionCondition "Standing, MOCS" => #12
      Expression: it.OriginalPayload.Method == "MOCS" && it.OriginalPayload.Context == "Standing"
    ExternalizedMapping(Intensities) => #13
    ExternalizedMapping(Repetitions) => #14
    #12, #13, #14 -> MocsProcedure(Intensities(double=20, double=30, double=40), Repetitions=2)
    -> BehaviorSubject MOCS_Standing
    SubscribeSubject TrialCompleted
    -> Bonsai.Scripting.Expressions.ExpressionCondition "Walking, MOCS" => #18
      Expression: it.OriginalPayload.Method == "MOCS" && it.OriginalPayload.Context == "Walking"
    #18, #13, #14 -> MocsProcedure(Intensities(double=20, double=30, double=40), Repetitions=2)
    -> BehaviorSubject MOCS_Walking

ExternalizedMapping
  StimulusType(Category=Stimulus)
  BaseFrequency(Category=Stimulus)
  Duration(Category=Stimulus)
  EnvFrequency(Category=Stimulus)
  ContrastA(Category=Stimulus)
  ContrastB(Category=Stimulus)
-> GroupWorkflow GenerateTrialPayload
    SubscribeSubject TrialCompleted
    -> Unit => #1
    GroupWorkflow StartTrialsTrigger => #2
        Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false)
        -> Unit
        -> First
        -> WorkflowOutput
    #1, #2 -> Merge
    -> SelectMany CheckForPause => #4
        WorkflowInput Source1 => #0
        SubscribeSubject IsPaused
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> Take(Count=1) => #3
        #0, #3 -> Zip
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    SubscribeSubject Method => #5
    #4, #5 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #7
    -> Condition isStaircase
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=Staircase))
        -> WorkflowOutput
    -> GroupWorkflow GetStaircaseTrial => #9
        WorkflowInput Source1 => #0
        SubscribeSubject Context => #1
        #0, #1 -> WithLatestFrom => #2
        -> Condition "Standing Trial" => #3
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=StringProperty(Value=Standing))
            -> WorkflowOutput
        SubscribeSubject Staircase_Standing
        -> MemberSelector(Selector=Intensity) => #5
        #3, #5 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #7
        #2 -> Condition "Walking Trial" => #8
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=StringProperty(Value=Walking))
            -> WorkflowOutput
        SubscribeSubject Staircase_Walking
        -> MemberSelector(Selector=Intensity) => #10
        #8, #10 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #12
        #7, #12 -> Merge
        -> WorkflowOutput
    #7 -> Condition isMOCS
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=MOCS))
        -> WorkflowOutput
    -> GroupWorkflow GetMOCSTrial => #11
        WorkflowInput Source1 => #0
        SubscribeSubject Context => #1
        #0, #1 -> WithLatestFrom => #2
        -> Condition "Standing Trial" => #3
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=StringProperty(Value=Standing))
            -> WorkflowOutput
        SubscribeSubject MOCS_Standing => #4
        #3, #4 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #6
        #2 -> Condition "Walking Trial" => #7
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=StringProperty(Value=Walking))
            -> WorkflowOutput
        SubscribeSubject MOCS_Walking => #8
        #7, #8 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #10
        #6, #10 -> Merge
        -> WorkflowOutput
    #9, #11 -> Merge => #12
    Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1) => #13
    #7, #13 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Numerics.Distributions.Sample
    -> Multiply(Operand=IntProperty(Value=2))
    -> Subtract(Operand=IntProperty(Value=1)) => #18
    #12, #18 -> Zip => #19
    SubscribeSubject Context => #20
    SubscribeSubject Method => #21
    #20, #21 -> CombineLatest
    -> PropertyMapping(Context(Selector=Item1), Method(Selector=Item2)) => #23
    ExternalizedMapping(StimulusType, BaseFrequency, Duration, EnvFrequency, ContrastA, ContrastB) => #24
    #19, #23, #24 -> CreateTrialPayload(Context=Standing, Method=MOCS, StimulusType=s, BaseFrequency=200, Duration=1000, EnvFrequency=4, ContrastA=1, ContrastB=1)
    -> PublishSubject CurrentPayload
    -> WorkflowOutput

ExternalizedMapping(PauseEveryNTrials)
-> GroupWorkflow PauseWorkflow
    Bonsai.Windows.Input.KeyDown(Filter="ShiftKey P Shift", SuppressRepetitions=false)
    -> BooleanProperty(Value=true) => #1
    Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false)
    -> BooleanProperty(Value=false) => #3
    SubscribeSubject TrialCompleted => #4
    ExternalizedMapping(Count(DisplayName=PauseEveryNTrials)) => #5
    #4, #5 -> BufferCount(Count=176, Skip=nil)
    -> BooleanProperty(Value=true) => #7
    #1, #3, #7 -> Merge
    -> BehaviorSubject IsPaused

GroupWorkflow ResponseHardware
    Bonsai.Windows.Input.KeyDown(Filter=R, SuppressRepetitions=false)
    -> Unit
    -> PublishSubject RightResponse

    Bonsai.Windows.Input.KeyUp(Filter=L)
    -> Unit
    -> PublishSubject LeftResponse

    Bonsai.Windows.Input.KeyDown(Filter=Q, SuppressRepetitions=false)
    -> Unit
    -> PublishSubject RightNoResponse

    Bonsai.Windows.Input.KeyDown(Filter=M, SuppressRepetitions=false)
    -> Unit
    -> PublishSubject LeftNoResponse

GroupWorkflow IMU
    ExternalizedMapping(PortName(DisplayName=IMUport))
    -> Bonsai.IO.Ports.CreateSerialPort
      Name=ArdIMU
      PortName=COM9
      BaudRate=115200
      NewLine=\r\n
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.Ports.SerialReadLine(PortName=ArdIMU, NewLine=\r\n)
    -> Parse(Pattern=%s)
    -> Retry => #4
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #6
    #4, #6 -> Zip => #7
    SubscribeSubject IMUName
    -> PropertyMapping(FileName) => #9
    #7, #9 -> Bonsai.IO.CsvWriter(FileName=C:\\Data\laura\20260610\sine_laura_IMU.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> BehaviorSubject IMUData

ExternalizedMapping(StimulusID(Category=Logging), SubjectID(Category=Logging), SavingDirBase(Category=Logging))
-> GroupWorkflow "Generate File Names"
    ExternalizedMapping(Value(DisplayName=StimulusID))
    -> StringProperty(Value=sine) => #1
    ExternalizedMapping(Value(DisplayName=SubjectID))
    -> StringProperty(Value=laura) => #3
    ExternalizedMapping(Value(DisplayName=SavingDirBase))
    -> StringProperty(Value=C:\) => #5
    SubscribeSubject DateDir => #6
    #1, #3, #5, #6 -> Zip
    -> Format(Format={2}\Data\{1}\{3}\{0}_{1}, Selector="Item1,Item2,Item3,Item4")
    -> BehaviorSubject FilenamePrefix

    SubscribeSubject FilenamePrefix
    -> Format(Format={0}_Trial.csv, Selector=it)
    -> BehaviorSubject TrialName

    SubscribeSubject FilenamePrefix
    -> Format(Format={0}_IMU.csv, Selector=it)
    -> BehaviorSubject IMUName

    Bonsai.Scripting.IronPython.PythonSource
      Script:
        from System import DateTime,String

        @returns(String)
        def generate():
          yield (DateTime.Now).ToString("yyyyMMdd")
    -> BehaviorSubject DateDir

SubscribeSubject CurrentPayload => #12
ExternalizedMapping(DueTime(DisplayName=ISI)) => #13
#12, #13 -> Delay(DueTime=PT1S)
-> SelectMany Trials => #15
    Bonsai.IO.Ports.SerialReadLine
    -> Parse(Pattern=%i)
    -> Retry
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=-1))
        -> WorkflowOutput
    -> Take(Count=1) => #4
    WorkflowInput Source1 => #5
    -> MemberSelector(Selector=Duration)
    -> Add(Operand=FloatProperty(Value=100))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromMilliseconds(it)
    -> PropertyMapping(DueTime) => #9
    #4, #9 -> Timeout(DueTime=PT1.1S) => #10
    IntProperty(Value=-1) => #11
    #10, #11 -> Catch
    -> MulticastSubject StimEnded
    -> SelectMany ClickEndStim
        ExternalizedMapping(FileName(DisplayName=StimEndSound))
        -> Bonsai.Audio.AudioReader(FileName=mixkit-modern-technology-select-3124.wav, BufferLength=500, SampleRate=44100)
        -> Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on Speakers/Headphones (Realtek(R) Audio)", SampleRate=44100, State=Playing)
        -> WorkflowOutput
    #5 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.StimulusType == "s" ? string.Format("s,{0},{1},{2},{3},{4},{5},{6}", it.Duration, it.FreqA, it.FreqB, it.PhaseA, it.PhaseB, it.ContrastA, it.ContrastB) : string.Format("se,{0},{1},{2},{3},{4},{5}", it.Duration, it.FreqA, it.FreqB, it.EnvFrequency, it.ContrastA, it.ContrastB)
    -> Bonsai.IO.Ports.SerialWriteLine(PortName=ArdPWM, NewLine=\r)
    -> SelectMany ClickStartStim
        ExternalizedMapping(FileName)
        -> Bonsai.Audio.AudioReader(FileName=mixkit-on-or-off-light-switch-tap-2585.wav, BufferLength=1000, SampleRate=44100)
        -> Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on Speakers/Headphones (Realtek(R) Audio)", SampleRate=44100, State=Playing)
        -> WorkflowOutput
    SubscribeSubject StimEnded => #18
    #5, #18 -> GroupWorkflow TrialResponse
        WorkflowInput Source1 => #0
        WorkflowInput Source2
        -> SelectMany GetResponse => #2
            Disable GroupWorkflow DoubleClickResps
                SubscribeSubject RightResponse
                -> IntProperty(Value=1) => #1
                SubscribeSubject LeftResponse
                -> IntProperty(Value=-1) => #3
                #1, #3 -> Amb => #4
                -> Throttle(DueTime=PT0.25S) => #5
                #4, #5 -> BufferTrigger(Count=nil)
                -> MemberSelector(Selector=Count) => #7
                -> Condition OneClick
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> IntProperty(Value=1) => #9
                #7 -> Condition MoreThanOneClick
                    WorkflowInput Source1
                    -> GreaterThan(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> IntProperty(Value=0) => #11
                #9, #11 -> Merge => #12
                #4, #12 -> Zip
                -> First
                -> WorkflowOutput

            SubscribeSubject RightResponse
            -> First
            -> IntProperty(Value=1) => #3
            SubscribeSubject LeftResponse
            -> First
            -> IntProperty(Value=-1) => #6
            #3, #6 -> Amb => #7
            -> Bonsai.Scripting.Expressions.ExpressionCondition LeftResp
              Expression: it==-1
            -> SelectMany "Left Yes/No" => #9
                WorkflowInput Source1 => #0
                SubscribeSubject LeftNoResponse
                -> IntProperty(Value=0) => #2
                SubscribeSubject LeftResponse
                -> IntProperty(Value=1) => #4
                #2, #4 -> Amb => #5
                #0, #5 -> Zip
                -> WorkflowOutput
            #7 -> Bonsai.Scripting.Expressions.ExpressionCondition RightResp
              Expression: it==1
            -> SelectMany "Right Yes/No" => #11
                WorkflowInput Source1 => #0
                SubscribeSubject RightNoResponse
                -> IntProperty(Value=0) => #2
                SubscribeSubject RightResponse
                -> IntProperty(Value=1) => #4
                #2, #4 -> Amb => #5
                #0, #5 -> Zip
                -> WorkflowOutput
            #9, #11 -> Merge
            -> First
            -> WorkflowOutput
            #7 -> SelectMany
                ExternalizedMapping(FileName(DisplayName=StimEndSound))
                -> Bonsai.Audio.AudioReader(FileName=mixkit-modern-technology-select-3124.wav, BufferLength=500, SampleRate=44100)
                -> Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on Speakers/Headphones (Realtek(R) Audio)", SampleRate=44100, State=Playing)
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject DiscriminationResponse => #4
        #2 -> MemberSelector(Selector=Item2)
        -> MulticastSubject DetectionResponse => #6
        #0, #4, #6 -> Zip
        -> CreateTrialResult
        -> WorkflowOutput
    -> WorkflowOutput
SubscribeSubject TrialName
-> PropertyMapping(FileName) => #17
#15, #17 -> Bonsai.IO.CsvWriter(FileName=C:\\Data\laura\20260617\sine_laura_Trial.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true) => #18
-> Disable GroupWorkflow RandomStateAndMethodGenerator => #19
    WorkflowInput Source1 => #0
    Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1) => #1
    #0, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Numerics.Distributions.Sample
    -> Bonsai.Scripting.Expressions.ExpressionTransform RandomContext
      Expression: it == 0 ? "Standing" : "Walking"
    -> MulticastSubject Context
    -> Delay(DueTime=PT0.05S) => #7
    Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1) => #8
    #0, #8 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Numerics.Distributions.Sample
    -> Bonsai.Scripting.Expressions.ExpressionTransform RandomMethod
      Expression: it == 0 ? "Staircase" : "MOCS"
    -> MulticastSubject Method
    -> Delay(DueTime=PT0.05S) => #14
    #7, #14 -> Zip
    -> WorkflowOutput
#19, #18 -> WithLatestFrom
-> MemberSelector(Selector=Item2)
-> MulticastSubject TrialCompleted

GroupWorkflow Visualisers
    GroupWorkflow "Performance and Trial Counts"
        SubscribeSubject Staircase_Standing => #0
        -> MemberSelector(Selector=Reversals) => #1
        #0 -> MemberSelector(Selector=ReversalAverage) => #2
        #1, #2 -> Zip
        -> VisualizerMapping => #4
        SubscribeSubject Staircase_Walking => #5
        -> MemberSelector(Selector=Reversals) => #6
        #5 -> MemberSelector(Selector=ReversalAverage) => #7
        #6, #7 -> Zip
        -> VisualizerMapping => #9
        SubscribeSubject Staircase_Standing
        -> MemberSelector(Selector=Intensity)
        -> Visualizer StandingStaircase
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #13
        SubscribeSubject Staircase_Walking
        -> MemberSelector(Selector=Intensity)
        -> Visualizer WalkingStaircase
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #17
        SubscribeSubject TrialCompleted
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.OriginalPayload.Context == "Standing" && it.OriginalPayload.Method == "MOCS"
        -> PsychometricTracker => #20
        -> MemberSelector(Selector=Item1) => #21
        -> Concat => #22
        #20 -> MemberSelector(Selector=Item2)
        -> Concat => #24
        #22, #24 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #26
          Expression: new(Item1 as X, Item2 as Y)
        #21 -> MemberSelector(Selector=Length)
        -> PropertyMapping(Capacity) => #28
        #26, #28 -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=Circle, LineWidth=1, CurveSettings="", Capacity=1, XMin=nil, XMax=nil, YMin=-0.1, YMax=1.1)
        -> VisualizerMapping => #30
        SubscribeSubject TrialCompleted
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.OriginalPayload.Context == "Walking" && it.OriginalPayload.Method == "MOCS"
        -> PsychometricTracker => #33
        -> MemberSelector(Selector=Item1) => #34
        -> Concat => #35
        #33 -> MemberSelector(Selector=Item2)
        -> Concat => #37
        #35, #37 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #39
          Expression: new(Item1 as X, Item2 as Y)
        #34 -> MemberSelector(Selector=Length)
        -> PropertyMapping(Capacity) => #41
        #39, #41 -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=Circle, LineWidth=1, CurveSettings="", Capacity=5, XMin=nil, XMax=nil, YMin=-0.1, YMax=1.1)
        -> VisualizerMapping => #43
        #20 -> MemberSelector(Selector=Item3)
        -> Concat => #45
        #20 -> MemberSelector(Selector=Item1) => #46
        -> Concat => #47
        #45, #47 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #49
          Expression: new(Item1 as X, Item2 as Y)
        #46 -> MemberSelector(Selector=Length)
        -> PropertyMapping(Capacity) => #51
        #49, #51 -> Bonsai.Gui.ZedGraph.BarGraphBuilder(IndexSelector=Y, ValueSelector=X, BaseAxis=X, BarType=Cluster, CurveSettings="", Capacity=1, Min=nil, Max=nil)
        -> VisualizerMapping => #53
        #33 -> MemberSelector(Selector=Item3)
        -> Concat => #55
        #33 -> MemberSelector(Selector=Item1) => #56
        -> Concat => #57
        #55, #57 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #59
          Expression: new(Item1 as X, Item2 as Y)
        #56 -> MemberSelector(Selector=Length)
        -> PropertyMapping(Capacity) => #61
        #59, #61 -> Bonsai.Gui.ZedGraph.BarGraphBuilder(IndexSelector=Y, ValueSelector=X, BaseAxis=X, BarType=Cluster, CurveSettings="", Capacity=nil, Min=nil, Max=nil)
        -> VisualizerMapping => #63
        #4, #9, #13, #17, #30, #43, #53, #63 -> Bonsai.Gui.TableLayoutPanelBuilder Performance
          Enabled=true
          Visible=true
          ColumnCount=2
          RowCount=4
          ColumnStyles=""
          RowStyles
            RowStyle(SizeType=Percent, Height=7)
            RowStyle(SizeType=Percent, Height=31)
            RowStyle(SizeType=Percent, Height=31)
            RowStyle(SizeType=Percent, Height=31)
          CellSpans=""
        -> WorkflowOutput

    SubscribeSubject TrialCompleted
    -> Bonsai.Scripting.Expressions.ExpressionTransform CurrentTrialValues
      Expression: String.Format("Context: {0}, Method: {1}, StimType: {2}, TargetSide: {3}, Intensity: {4}Hz, FreqA: {5}Hz, FreqB: {6}Hz, Duration: {7}ms, EnvFreq: {8}Hz, PhaseA: {9}, PhaseB: {10}, ContrastA: {11}, ContrastB: {12}, DiscrimResponse: {13}, DetectResponse: {14}, IsCorrect: {15}", it.OriginalPayload.Context, it.OriginalPayload.Method, it.OriginalPayload.StimulusType, it.OriginalPayload.TargetSide, it.OriginalPayload.Intensity, it.OriginalPayload.FreqA, it.OriginalPayload.FreqB, it.OriginalPayload.Duration, it.OriginalPayload.EnvFrequency, it.OriginalPayload.PhaseA, it.OriginalPayload.PhaseB, it.OriginalPayload.ContrastA, it.OriginalPayload.ContrastB, it.DiscriminationResponse, it.DetectionResponse, it.IsCorrect)

    SubscribeSubject IMUData
