WorkflowBuilder(Version=2.7.1)
GroupWorkflow Video => #0
    Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=18159192, ColorProcessing=NoColorProcessing)
    -> MemberSelector(Selector=Image) => #1
    SubscribeSubject FaceVideoName
    -> PropertyMapping(FileName) => #3
    #1, #3 -> Bonsai.Vision.VideoWriter
      FileName=D:\\Data\M25104\20251107\SinewaveFlicker_M25104_FaceVideo.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Disable TimeInterval
    -> Disable MemberSelector(Selector=Interval.Milliseconds) => #6
    #6, #3 -> Disable Bonsai.FFmpeg.VideoWriter(Suffix=Timestamp, Overwrite=false, FrameRate=0)

    Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=18159117, ColorProcessing=Default)
    -> MemberSelector(Selector=Image) => #9
    SubscribeSubject BodyVideoName
    -> PropertyMapping(FileName) => #11
    #9, #11 -> Bonsai.Vision.VideoWriter
      FileName=D:\\Data\M25104\20251107\SinewaveFlicker_M25104_BodyVideo.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Disable TimeInterval
    -> Disable MemberSelector(Selector=Interval.Milliseconds) => #14
    #14, #11 -> Disable Bonsai.FFmpeg.VideoWriter(Suffix=Timestamp, Overwrite=false, FrameRate=0)
Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 Back Tab Clear Return Enter A D E H I L M Shift", SuppressRepetitions=true) => #1
#0, #1 -> SubscribeWhen

ExternalizedMapping(WheelPort)
-> GroupWorkflow Arduino
    ExternalizedMapping(PortName(DisplayName=WheelPort))
    -> Bonsai.IO.CreateSerialPort
      Name=ArduinoSerial
      PortName=COM10
      BaudRate=1000000
      Encoding=us-ascii
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    ExternalizedMapping(PortName)
    -> Bonsai.IO.SerialStringRead(PortName=ArduinoSerial, NewLine=\n)
    -> Parse(Pattern="%i,%i,%i,%i,%i")
    -> Retry => #5
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject WheelInput
    #5 -> MemberSelector(Selector=Item2)
    -> BehaviorSubject FaceVideoTime
    #5 -> MemberSelector(Selector=Item3)
    -> BehaviorSubject BodyVideoTime
    #5 -> MemberSelector(Selector=Item4)
    -> BehaviorSubject LastSyncPulseTime
    #5 -> MemberSelector(Selector=Item5)
    -> BehaviorSubject ArduinoTime

ExternalizedMapping(StimulusID(Category=Filename), MouseID(Category=Filename))
-> GroupWorkflow "Generate File Names"
    ExternalizedMapping(Value(DisplayName=StimulusID))
    -> StringProperty(Value=SinewaveFlicker) => #1
    ExternalizedMapping(Value(DisplayName=MouseID))
    -> StringProperty(Value=M25104) => #3
    SubscribeSubject DateDir => #4
    ExternalizedMapping(Value(DisplayName=SavingDirBase))
    -> StringProperty(Value=D:\) => #6
    #1, #3, #6, #4 -> Zip
    -> Format(Format={2}\Data\{1}\{3}\{0}_{1}, Selector="Item1,Item2,Item3,Item4")
    -> BehaviorSubject FilenamePrefix

    SubscribeSubject FilenamePrefix => #10
    -> Format(Format={0}_WheelLog.csv, Selector=it)
    -> BehaviorSubject WheelName
    #10 -> Format(Format={0}_Trial.csv, Selector=it)
    -> BehaviorSubject TrialName
    #10 -> Format(Format={0}_Video.csv, Selector=it)
    -> BehaviorSubject VideoCSVName
    #10 -> Format(Format={0}_FaceVideo.avi, Selector=it)
    -> BehaviorSubject FaceVideoName
    #10 -> Format(Format={0}_BodyVideo.avi, Selector=it)
    -> BehaviorSubject BodyVideoName
    #10 -> Format(Format={0}_ArduinoStim.csv, Selector=it)
    -> BehaviorSubject PWMCSVName

    Bonsai.Scripting.IronPython.PythonSource
      Script:
        from System import DateTime,String

        @returns(String)
        def generate():
          yield (DateTime.Now).ToString("yyyyMMdd")
    -> BehaviorSubject DateDir

GroupWorkflow Logging
    GroupWorkflow WheelLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #0
        ExternalizedMapping(Overwrite) => #0
        ExternalizedMapping(Suffix) => #1
        ExternalizedMapping(Name)
        -> SubscribeSubject WheelLog => #3
        SubscribeSubject WheelName
        -> PropertyMapping(FileName) => #5
        #5, #0, #1, #3 -> Bonsai.IO.CsvWriter
          FileName=D:\\Data\M25104\20250916\SinewaveFlicker_M25104_WheelLog.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #1
    #0, #1 -> SubscribeWhen
    GroupWorkflow VideoLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #3
        SubscribeSubject VideoLog => #0
        ExternalizedMapping(Overwrite) => #1
        ExternalizedMapping(Suffix) => #2
        SubscribeSubject VideoCSVName
        -> PropertyMapping(FileName) => #4
        #4, #1, #2, #0 -> Bonsai.IO.CsvWriter
          FileName=D:\\Data\M25104\20251107\SinewaveFlicker_M25104_Video.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    #3, #1 -> Disable SubscribeWhen
    Disable GroupWorkflow PhotodiodeLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #5
        ExternalizedMapping(Overwrite) => #0
        ExternalizedMapping(Suffix) => #1
        ExternalizedMapping(Name)
        -> SubscribeSubject PDLog => #3
        SubscribeSubject PDname
        -> PropertyMapping(FileName) => #5
        #5, #0, #1, #3 -> Bonsai.IO.CsvWriter
          FileName=C:\Users\saleem_lab\Documents\Data\M25026\2025-04-29\DotMotion_SpeedTuning_M25026_PDAsync.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    #5, #1 -> Disable SubscribeWhen
    GroupWorkflow TrialLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #7
        SubscribeSubject TrialParams => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        #0, #2 -> Zip => #3
        ExternalizedMapping(Overwrite) => #4
        ExternalizedMapping(Suffix) => #5
        SubscribeSubject ArduinoTime => #6
        #3, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
          Expression:
            new(Item1.Item1 as Stimulus,
            Item1.Item2 as BonsaiTime,
            Item2 as ArduinoTime)
        SubscribeSubject TrialName
        -> PropertyMapping(FileName) => #10
        #10, #4, #5, #8 -> Bonsai.IO.CsvWriter
          FileName=D:\\Data\M25104\20250916\SinewaveFlicker_M25104_Trial.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector="Stimulus,BonsaiTime,ArduinoTime"
    #7, #1 -> SubscribeWhen
    GroupWorkflow ArduinoPWMLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #9
        ExternalizedMapping(Overwrite) => #0
        ExternalizedMapping(Suffix) => #1
        Disable SubscribeSubject ArduinoTime => #2
        SubscribeSubject PWMCSVName
        -> PropertyMapping(FileName) => #4
        SubscribeSubject ArdPWMInput => #5
        StringProperty(Value='"') => #6
        #5, #6 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
          Expression: Item2+Item1+Item2
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #10
        #8, #10 -> Zip => #11
        #11, #2 -> Disable WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
          Expression:
            new(Item1 as ArduinoString,
            Item2 as BonsaiTime)
        #4, #0, #1, #13 -> Bonsai.IO.CsvWriter
          FileName=D:\\Data\M25104\20250916\SinewaveFlicker_M25104_ArduinoStim.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector="ArduinoString,BonsaiTime"
    #9, #1 -> SubscribeWhen

    GroupWorkflow WheelLogging
        SubscribeSubject WheelInput => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        SubscribeSubject LastSyncPulseTime => #3
        SubscribeSubject ArduinoTime => #4
        #0, #3, #4, #2 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as Wheel,
            Item2 as LastSyncPulseTime,
            Item3 as ArduinoTime,
            Item4 as BonsaiTime)
        -> BehaviorSubject WheelLog
        -> WorkflowOutput

    GroupWorkflow VideoLogging
        SubscribeSubject FaceVideoTime => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        SubscribeSubject BodyVideoTime => #3
        SubscribeSubject ArduinoTime => #4
        SubscribeSubject LastSyncPulseTime => #5
        #0, #3, #5, #4, #2 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as LastFaceVideoTime,
            Item2 as LastBodyVideoTime,
            Item3 as LastSyncPulsetime,
            Item4 as ArduinoTime,
            Item5 as BonsaiTime)
        -> BehaviorSubject VideoLog
        -> WorkflowOutput

GroupWorkflow CalcWheelSpeed => #8
    SubscribeSubject WheelInput => #0
    SubscribeSubject ArduinoTime => #1
    #0, #1 -> Zip => #2
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToSingle(it)
    -> Bonsai.Dsp.Difference(Order=1)
    -> Bonsai.Numerics.Abs
    -> Condition IgnoreOverflowTicks => #7
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> LessThan(Operand=DoubleProperty(Value=512))
        -> WorkflowOutput
    SubscribeSubject cmPerTick => #8
    #7, #8 -> CombineLatest
    -> Multiply => #10
    #2 -> MemberSelector(Selector=Item2)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToSingle(it)
    -> Bonsai.Dsp.Difference(Order=1)
    -> Divide(Operand=DoubleProperty(Value=1000)) => #14
    #10, #14 -> Zip
    -> Divide
    -> BehaviorSubject RawWheelSpeed => #17
    ExternalizedMapping(TimeSpan(DisplayName=RunningAverageTimeWindow)) => #18
    #17, #18 -> WindowTime(TimeSpan=PT0.1S)
    -> SelectMany
        WorkflowInput Source1
        -> Average
        -> WorkflowOutput
    -> BehaviorSubject MovMeanWheelSpeed => #21
    -> Condition
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=1))
        -> WorkflowOutput
    -> IntProperty(Value=1) => #23
    #21 -> Condition
        WorkflowInput Source1
        -> LessThanOrEqual(Operand=DoubleProperty(Value=1))
        -> WorkflowOutput
    -> IntProperty(Value=0) => #25
    #23, #25 -> Merge
    -> BehaviorSubject CurrentState

    ExternalizedMapping(Value(DisplayName=WheelDiam))
    -> FloatProperty(Value=19.5) => #29
    FloatProperty(Value=3.14159274) => #30
    #29, #30 -> CombineLatest
    -> Multiply
    -> BehaviorSubject WheelCircumference => #33
    ExternalizedMapping(Value(DisplayName=TicksPerRev))
    -> FloatProperty(Value=4096) => #35
    #33, #35 -> CombineLatest
    -> Divide
    -> BehaviorSubject cmPerTick
SubscribeSubject WheelInput => #9
#8, #9 -> SubscribeWhen

ExternalizedMapping(ISI(Category=Timing))
-> GroupWorkflow GetNextStimulus
    Disable SubscribeSubject FreqArray => #0
    Disable SubscribeSubject StimIndexArray => #1
    Disable IntProperty(Value=0) => #2
    Disable ExternalizedMapping(DueTime(DisplayName=ISI)) => #3
    Disable SubscribeSubject StimEnded => #4
    #3, #4 -> Disable Delay(DueTime=PT2S)
    -> Disable IntProperty(Value=1)
    -> Disable Accumulate => #7
    Disable SubscribeSubject TotalStimulusCount
    -> Disable PropertyMapping(Value) => #9
    #7, #9 -> Disable Condition => #10
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> LessThan(Operand=IntProperty(Value=550))
        -> WorkflowOutput
    #2, #10 -> Disable Merge => #11
    #1, #11 -> Disable CombineLatest
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #13
      Expression: Item1[Item2]
    #0, #13 -> Disable CombineLatest
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Item1[Item2]
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToString(it)
    -> Disable WorkflowOutput

    Bonsai.IO.SerialStringRead(PortName=ArdPWM, NewLine=\n) => #18
    -> Parse(Pattern=%i)
    -> Retry
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=-1))
        -> WorkflowOutput
    -> BehaviorSubject StimEnded
    #18 -> BehaviorSubject ArdPWMInput

    SubscribeSubject StimulusValues => #24
    SubscribeSubject CurrentState
    -> Disable Take(Count=1)
    -> Condition EnsureCorrectStateIndex
        WorkflowInput Source1 => #0
        SubscribeSubject nStates => #1
        #0, #1 -> CombineLatest
        -> LessThan
        -> WorkflowOutput
    -> PropertyMapping(DistributionIndex) => #28
    SubscribeSubject ProbDistArray
    -> PropertyMapping(ProbabilityDistributions) => #30
    ExternalizedMapping(DueTime(DisplayName=ISI)) => #31
    SubscribeSubject StimEnded => #32
    -> Condition NotPause => #33
        SubscribeSubject PauseFlag
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    #31, #33 -> Delay(DueTime=PT2S)
    -> Unit => #35
    #28, #30, #35 -> RandSampleFromIndexedDistribution
      ProbabilityDistributions
        ArrayOfFloat
          float=5
          float=5
          float=5
          float=5
          float=5
          float=5
          float=5
          float=5
          float=5
          float=5
          float=5
          float=5
          float=5
          float=5
          float=5
          float=5
          float=5
          float=5
          float=5
          float=5
        ArrayOfFloat
          float=5.882353
          float=5.882353
          float=5.882353
          float=5.882353
          float=5.882353
          float=5.882353
          float=5.882353
          float=5.882353
          float=0
          float=5.882353
          float=0
          float=5.882353
          float=5.882353
          float=5.882353
          float=5.882353
          float=5.882353
          float=5.882353
          float=0
          float=5.882353
          float=5.882353
      DistributionIndex=1
    -> BehaviorSubject CurrentStimIndex => #37
    #24, #37 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Item1[Item2]
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToString(it)
    -> WorkflowOutput
    #32 -> Condition Pause
        SubscribeSubject PauseFlag
        -> Equal(Operand=BooleanProperty(Value=true))
        -> WorkflowOutput
    -> Delay(DueTime=PT4S)
    -> IntProperty(Value=-1)
    -> MulticastSubject StimEnded

    IntProperty(Value=0)
    -> MulticastSubject StimEnded
-> Bonsai.IO.SerialStringWrite(PortName=ArdPWM, NewLine=\r)
-> BehaviorSubject TrialParams => #14
ExternalizedMapping(StateTrackingDuration(Category=Timing)) => #15
#14, #15 -> SelectMany
    WorkflowInput Source1 => #0
    ExternalizedMapping(DueTime(DisplayName=StateTrackingDuration)) => #1
    #0, #1 -> Delay(DueTime=PT2S)
    -> GroupWorkflow ClasifyTrialAndUpdateCounters
        SubscribeSubject MovMeanWheelSpeed => #0
        WorkflowInput Source1 => #1
        #0, #1 -> TakeUntil
        -> Average
        -> BehaviorSubject MeanRunSpeed => #4
        -> Condition RunTrial?
            WorkflowInput Source1
            -> GreaterThan(Operand=DoubleProperty(Value=1))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #6
        #4 -> Condition StatTrial?
            WorkflowInput Source1
            -> LessThanOrEqual(Operand=DoubleProperty(Value=1))
            -> WorkflowOutput
        -> IntProperty(Value=0) => #8
        #6, #8 -> Merge
        -> First
        -> BehaviorSubject TrialStateClass
        ExternalizedMapping(RunMinPropThresh) => #12
        #0, #12 -> Condition OverRunThresh?
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=RunMinPropThresh)) => #1
            #0, #1 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.5))
            -> WorkflowOutput
        -> FloatProperty(Value=1)
        -> Accumulate => #15
        FloatProperty(Value=0) => #16
        #15, #16 -> Merge => #17
        #17, #1 -> TakeUntil
        -> Last => #19
        #0 -> FloatProperty(Value=1)
        -> Accumulate => #21
        #21, #1 -> TakeUntil
        -> Last => #23
        #19, #23 -> Zip
        -> Divide
        -> BehaviorSubject RunProp
        ExternalizedMapping(StatMaxPropThresh) => #27
        #0, #27 -> Condition UnderStatThresh?
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=StatMaxPropThresh)) => #1
            #0, #1 -> LessThanOrEqual(Operand=DoubleProperty(Value=3))
            -> WorkflowOutput
        -> FloatProperty(Value=1)
        -> Accumulate => #30
        #30, #16 -> Merge => #31
        #31, #1 -> TakeUntil
        -> Last => #33
        #33, #23 -> Zip
        -> Divide
        -> BehaviorSubject StatProp

        SubscribeSubject TrialStateClass => #37
        SubscribeSubject CurrentStimIndex => #38
        #37, #38 -> Zip => #39
        SubscribeSubject TrialCounters
        -> PropertyMapping(TrialCounterArray) => #41
        #41, #39 -> IncrementStateDependentTrialCounter
          TrialCounterArray
            ArrayOfInt(int=0, int=0, int=0, int=0, int=0, int=0, int=0, int=0, int=0, int=0, int=0, int=0, int=0, int=0, int=0, int=0, int=0, int=0, int=0, int=0)
            ArrayOfInt(int=0, int=0, int=0, int=0, int=0, int=0, int=0, int=0, int=1, int=0, int=1, int=0, int=0, int=0, int=0, int=0, int=0, int=1, int=0, int=0)
        -> MulticastSubject TrialCounters => #43
        #37, #38, #43 -> Zip
        -> MulticastSubject MonitorTrialCountsSub
        -> WorkflowOutput
-> Disable Concat
-> Disable Repeat => #18
Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false) => #19
#18, #19 -> SubscribeWhen

ExternalizedMapping(UpdateProbabilityDistsBool(Category=StimControl), scalingFactor(Category=StimControl), DistsFileName, StimFileName)
-> GroupWorkflow AdaptiveStimControl
    ExternalizedMapping(DistsFileName(Category=StimulusSpec), StimFileName(Category=StimulusSpec))
    -> GroupWorkflow GenStimProbDists
        ExternalizedMapping(FileName(DisplayName=DistsFileName))
        -> Bonsai.IO.CsvReader(FileName=StimulusCSVfiles\sinusoidalFlicker\dists_sinewave_tfTuning.csv, ScanPattern="%f,%f", SkipRows=1) => #1
        -> MemberSelector(Selector=Item1)
        -> ToArray
        -> BehaviorSubject ProbDist1 => #4
        #1 -> MemberSelector(Selector=Item2)
        -> ToArray
        -> BehaviorSubject ProbDist2 => #7
        -> Delay(DueTime=PT1S) => #8
        #4, #8 -> Merge
        -> ToList
        -> Disable ToArray => #11
        -> BehaviorSubject ProbDistArray
        -> MemberSelector(Selector=Count)
        -> Disable MemberSelector(Selector=Length)
        -> BehaviorSubject nStates
        -> BehaviorSubject initCountersSub
        -> WorkflowOutput
        #11 -> BehaviorSubject OriginalProbDistArray
        #7 -> MemberSelector(Selector=Length)
        -> BehaviorSubject nStim

        ExternalizedMapping(FileName(DisplayName=StimFileName))
        -> Bonsai.IO.CsvReader(FileName=StimulusCSVfiles\sinusoidalFlicker\stimuli_sinewave_tfTuning.csv, ScanPattern="", SkipRows=1)
        -> Bonsai.Scripting.IronPython.PythonTransform 'Trim "'
          Script:
            @returns(str)
            def process(value):
              cleaned_string = value.replace('"', '')
              return cleaned_string
        -> ToArray
        -> BehaviorSubject StimulusValues
        -> MemberSelector(Selector=Length)

    GroupWorkflow InitTrialCounters
        IntProperty(Value=0)
        -> Take(Count=1) => #1
        SubscribeSubject nStim
        -> PropertyMapping(Count) => #3
        #1, #3 -> RepeatCount(Count=20)
        -> ToArray => #5
        SubscribeSubject nStates
        -> PropertyMapping(Count) => #7
        #5, #7 -> RepeatCount(Count=2)
        -> ToList
        -> Disable ToArray
        -> Disable MemberSelector(Selector=Count)
        -> BehaviorSubject TrialCounters => #12
        SubscribeSubject initCountersSub => #13
        #12, #13 -> SubscribeWhen
        -> WorkflowOutput
        IntProperty(Value=0) => #16
        IntProperty(Value=0) => #17
        #16, #17, #12 -> Zip
        -> Skip(Count=1)
        -> BehaviorSubject MonitorTrialCountsSub => #20
        #20, #13 -> SubscribeWhen

    ExternalizedMapping(UpdateProbabilityDistsBool(Category=StimControl), scalingFactor(Category=StimControl))
    -> GroupWorkflow UpdateProbabilityDists
        SubscribeSubject TrialCounters => #0
        SubscribeSubject OriginalProbDistArray => #1
        #0, #1 -> CombineLatest
        -> Skip(Count=1) => #3
        ExternalizedMapping(scalingFactor) => #4
        #3, #4 -> UpdateProbDistArray(scalingFactor=1E+21)
        -> Condition
            SubscribeSubject UpdateProbDistsBool
            -> WorkflowOutput
        -> MulticastSubject ProbDistArray
        -> WorkflowOutput

        ExternalizedMapping(Value(DisplayName=UpdateProbabilityDistsBool))
        -> BooleanProperty(Value=true)
        -> BehaviorSubject UpdateProbDistsBool

    Disable GroupWorkflow SimulateState
        Disable Timer(DueTime=PT0S, Period=PT2S)
        -> Disable Bonsai.Numerics.CreateRandom(Seed=nil)
        -> Disable Bonsai.Numerics.Distributions.CreateNormal(Mean=0, StdDev=4)
        -> Disable Bonsai.Numerics.Distributions.Sample
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            it < 0 ? 0 :
            1
        -> Disable BehaviorSubject CurrentState
        -> Disable WorkflowOutput

        Disable ExternalizedMapping(Value(DisplayName=CurrentState))
        -> Disable IntProperty(Value=2)
        -> Disable BehaviorSubject CurrentState

    GroupWorkflow MonitorTrialCounts
        SubscribeSubject MonitorTrialCountsSub => #0
        -> Condition State0? => #1
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
          Expression: Item3[Item1][Item2]
        #1 -> MemberSelector(Selector=Item2) => #3
        #2, #3 -> Zip => #4
        GroupWorkflow InitBarGraph => #5
            Timer(DueTime=PT0S, Period=PT0.001S)
            -> IntProperty(Value=0) => #1
            SubscribeSubject nStim
            -> PropertyMapping(Count) => #3
            #1, #3 -> Take(Count=20) => #4
            IntProperty(Value=0) => #5
            Timer(DueTime=PT0S, Period=PT0.1S)
            -> IntProperty(Value=1)
            -> Accumulate => #8
            SubscribeSubject nStim
            -> Subtract(Operand=IntProperty(Value=1))
            -> PropertyMapping(Count) => #11
            #8, #11 -> Take(Count=19) => #12
            #5, #12 -> Merge => #13
            #4, #13 -> Zip
            -> WorkflowOutput
        #4, #5 -> Merge => #6
        #0 -> Condition State1? => #7
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
          Expression: Item3[Item1][Item2]
        #7 -> MemberSelector(Selector=Item2) => #9
        #8, #9 -> Zip => #10
        #10, #5 -> Merge => #11
        #6, #11 -> CombineLatest => #12
        -> MemberSelector(Selector=Item1)
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Item2, ValueSelector=Item1, BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        #12 -> MemberSelector(Selector=Item2)
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Item2, ValueSelector=Item1, BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)

ExternalizedMapping(PortName(DisplayName=PWMport))
-> Bonsai.IO.CreateSerialPort
  Name=ArdPWM
  PortName=COM12
  BaudRate=115200
  Encoding=us-ascii
  Parity=None
  ParityReplace=63
  DataBits=8
  StopBits=One
  Handshake=None
  DiscardNull=false
  DtrEnable=true
  RtsEnable=false
  ReadBufferSize=4096
  WriteBufferSize=2048
  ReceivedBytesThreshold=1

Bonsai.Windows.Input.KeyDown(Filter="ShiftKey P Shift", SuppressRepetitions=false)
-> BooleanProperty(Value=true) => #26
Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false)
-> BooleanProperty(Value=false) => #28
#26, #28 -> Merge
-> BehaviorSubject PauseFlag

ExternalizedMapping(UseChA, UseChB)
-> GroupWorkflow "PWM Channel Selection"
    ExternalizedMapping(Value(DisplayName=UseChA))
    -> IntProperty(Value=1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.ToString()
    -> DistinctUntilChanged => #3
    StringProperty(Value=useChA) => #4
    #4, #3 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Item1+","+Item2
    -> Bonsai.IO.SerialStringWrite(PortName=ArdPWM, NewLine=\r)

    ExternalizedMapping(Value(DisplayName=UseChB))
    -> IntProperty(Value=1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.ToString()
    -> DistinctUntilChanged => #11
    StringProperty(Value=useChB) => #12
    #12, #11 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Item1+","+Item2
    -> Bonsai.IO.SerialStringWrite(PortName=ArdPWM, NewLine=\r)
